# Generated by Configurator on Thu Jul 18 15:55:40 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM13,SerialManager,COM13
Device,405_Shutter,UserDefinedSerial,UserDefinedShutter
Device,488_shutter,UserDefinedSerial,UserDefinedShutter
Device,561_shutter,UserDefinedSerial,UserDefinedShutter
Device,640_shutter,UserDefinedSerial,UserDefinedShutter
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices
Property,405_Shutter,Close-command,00
Property,405_Shutter,Close-response,
Property,405_Shutter,Command mode,ASCII-CRLF-terminator
Property,405_Shutter,Initialize-command,00
Property,405_Shutter,Initialize-response,
Property,405_Shutter,Open-command,01
Property,405_Shutter,Open-response,
Property,405_Shutter,Port,COM13
Property,405_Shutter,QueryState-closed-response,
Property,405_Shutter,QueryState-command,
Property,405_Shutter,QueryState-open-response,
Property,405_Shutter,Response detection,Ignore responses
Property,405_Shutter,Shutdown-command,00
Property,405_Shutter,Shutdown-response,
Property,488_shutter,Close-command,10
Property,488_shutter,Close-response,
Property,488_shutter,Command mode,ASCII-CRLF-terminator
Property,488_shutter,Initialize-command,10
Property,488_shutter,Initialize-response,
Property,488_shutter,Open-command,11
Property,488_shutter,Open-response,
Property,488_shutter,Port,COM13
Property,488_shutter,QueryState-closed-response,
Property,488_shutter,QueryState-command,
Property,488_shutter,QueryState-open-response,
Property,488_shutter,Response detection,Ignore responses
Property,488_shutter,Shutdown-command,10
Property,488_shutter,Shutdown-response,
Property,561_shutter,Close-command,20
Property,561_shutter,Close-response,
Property,561_shutter,Command mode,ASCII-CRLF-terminator
Property,561_shutter,Initialize-command,20
Property,561_shutter,Initialize-response,
Property,561_shutter,Open-command,21
Property,561_shutter,Open-response,
Property,561_shutter,Port,COM13
Property,561_shutter,QueryState-closed-response,
Property,561_shutter,QueryState-command,
Property,561_shutter,QueryState-open-response,
Property,561_shutter,Response detection,Ignore responses
Property,561_shutter,Shutdown-command,20
Property,561_shutter,Shutdown-response,
Property,640_shutter,Close-command,30
Property,640_shutter,Close-response,
Property,640_shutter,Command mode,ASCII-CRLF-terminator
Property,640_shutter,Initialize-command,30
Property,640_shutter,Initialize-response,
Property,640_shutter,Open-command,31
Property,640_shutter,Open-response,
Property,640_shutter,Port,COM13
Property,640_shutter,QueryState-closed-response,
Property,640_shutter,QueryState-command,
Property,640_shutter,QueryState-open-response,
Property,640_shutter,Response detection,Ignore responses
Property,640_shutter,Shutdown-command,30
Property,640_shutter,Shutdown-response,

# Pre-init settings for COM ports
Property,COM13,AnswerTimeout,500.0000
Property,COM13,BaudRate,9600
Property,COM13,DelayBetweenCharsMs,0.0000
Property,COM13,Handshaking,Off
Property,COM13,Parity,None
Property,COM13,StopBits,1
Property,COM13,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions


# Roles
Property,Core,Camera,Camera-1
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Objective
# Light Path
# Condenser turret

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup


# Group: colours
# Preset: 561
ConfigGroup,colours,561,405_Shutter,State,0
ConfigGroup,colours,561,488_shutter,State,0
ConfigGroup,colours,561,561_shutter,State,1
ConfigGroup,colours,561,640_shutter,State,0

# Preset: None
ConfigGroup,colours,None,405_Shutter,State,0
ConfigGroup,colours,None,488_shutter,State,0
ConfigGroup,colours,None,561_shutter,State,0
ConfigGroup,colours,None,640_shutter,State,0

# Preset: 488
ConfigGroup,colours,488,405_Shutter,State,0
ConfigGroup,colours,488,488_shutter,State,1
ConfigGroup,colours,488,561_shutter,State,0
ConfigGroup,colours,488,640_shutter,State,0

# Preset: 640
ConfigGroup,colours,640,405_Shutter,State,0
ConfigGroup,colours,640,488_shutter,State,0
ConfigGroup,colours,640,561_shutter,State,0
ConfigGroup,colours,640,640_shutter,State,1

# Preset: 405
ConfigGroup,colours,405,405_Shutter,State,1
ConfigGroup,colours,405,488_shutter,State,0
ConfigGroup,colours,405,561_shutter,State,0
ConfigGroup,colours,405,640_shutter,State,0



# PixelSize settings

